Select_Active_File
/FILE_NAME=ALL_FILES
;

Set_Force_Platform_Threshold
/THRESHOLD=-5
! /SET_AS_DEFAULT=FALSE
;

Recalc
;

Select_Active_File
/FILE_NAME=GLOBAL
;

For_Each
/Iteration_Parameter_Name= TAG_NAMES
/Items= T01+T02+T03+T04+T05+T06+T07+T08+T09+T10+T11+T12+T13+T14+T15+T16+T17+T18+T19+T20+T21+T22+T23+T24+T25+T26+T27+T28+T29+T30+T31+T32+T33
;

Select_Active_File
/FILE_NAME=::TAG_NAMES
;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+FORCE+FORCE+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+COFP+COFP+FREEMOMENT+FREEMOMENT+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LANDMARK+LANDMARK+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+FRAME_NUMBERS+FRAME_NUMBERS+FRAME_NUMBERS+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET+TARGET
/SIGNAL_FOLDER=+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+RFT+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+RFT+LFT+RFT+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+LFT+LSK+LTH+RFT+RSK+RTH+RPV+Model+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=HEIGHT+MASS+F1X+F1Y+F1Z+F2X+F2Y+F2Z+M1X+M1Y+M1Z+M2X+M2Y+M2Z+FP1+FP2+F1X+F1Y+F1Z+F2X+F2Y+F2Z+M1X+M1Y+M1Z+M2X+M2Y+M2Z+FP1+FP2+FP1+FP2+Left_Ankle_Angle+Left_Hip_Angle+Left_Knee_Angle+Right_Ankle_Angle+Right_Hip_Angle+Right_Knee_Angle+Left_Ankle_Moment+Left_Hip_Moment+Left_Knee_Moment+Right_Ankle_Moment+Right_Hip_Moment+Right_Knee_Moment+Left_Ankle_Power+Left_Hip_Power+Left_Knee_Power+Right_Ankle_Power+Right_Hip_Power+Right_Knee_Power+Left_Ankle_Force_Local+Left_Hip_Force_Local+Left_Knee_Force_Local+Right_Ankle_Force_Local+Right_Hip_Force_Local+Right_Knee_Force_Local+Left_Foot_RotEnergy+Right_Foot_RotEnergy+Left_Shank_RotEnergy+Right_Shank_RotEnergy+Left_Thigh_RotEnergy+Right_Thigh_RotEnergy+VEL_LANK+VEL_LKNE+VEL_LHIP+VEL_RANK+VEL_RKNE+VEL_RHIP+HH_LEFT_HIP+HH_RIGHT_HIP+Left_Shank_Wrt_Ankle_Local+Right_Shank_Wrt_Ankle_Local+Left_Thigh_Wrt_Knee_Local+Right_Thigh_Wrt_Knee_Local+Left_Pelvis_Wrt_Hip_Local+Right_Pelvis_Wrt_Hip_Local+AngAcc+AngAcc+AngAcc+AngAcc+AngAcc+AngAcc+AngAcc+AngVel+AngVel+AngVel+AngVel+AngVel+AngVel+AngVel+CGAcc+CGAcc+CGAcc+CGAcc+CGAcc+CGAcc+CGAcc+CGPos+CGPos+CGPos+CGPos+CGPos+CGPos+CGPos+CGVel+CGVel+CGVel+CGVel+CGVel+CGVel+CGVel+COP_1+COP_1+DistEndPos+DistEndPos+DistEndPos+DistEndPos+DistEndPos+DistEndPos+DistEndPos+DistEndVel+DistEndVel+DistEndVel+DistEndVel+DistEndVel+DistEndVel+DistEndVel+Force_1+Force_1+FREEMOMENT_1+FREEMOMENT_1+ProxEndForce+ProxEndForce+ProxEndForce+ProxEndForce+ProxEndForce+ProxEndForce+ProxEndForce+ProxEndPos+ProxEndPos+ProxEndPos+ProxEndPos+ProxEndPos+ProxEndPos+ProxEndPos+ProxEndTorque+ProxEndTorque+ProxEndTorque+ProxEndTorque+ProxEndTorque+ProxEndTorque+ProxEndTorque+ProxEndVel+ProxEndVel+ProxEndVel+ProxEndVel+ProxEndVel+ProxEndVel+ProxEndVel+SegResidual+SegResidual+SegResidual+SegResidual+SegResidual+SegResidual+SegResidual+CenterOfMass+ANALOGTIME+FRAMES+TIME+L5TH+LAC+LASI+LCAL+LEP+LGTR+LLEP+LLML+LMEP+LMML+LSH1+LSH2+LSH3+LTH1+LTH2+LTH3+LWR+R5TH+RAC+RASI+RCAL+REP+RGTR+RLEP+RLML+RMEP+RMML+RSH1+RSH2+RSH3+RTH1+RTH2+RTH3+RWR+SACR+L5TH+LAC+LASI+LCAL+LEP+LGTR+LLEP+LLML+LMEP+LMML+LSH1+LSH2+LSH3+LTH1+LTH2+LTH3+LWR+R5TH+RAC+RASI+RCAL+REP+RGTR+RLEP+RLML+RMEP+RMML+RSH1+RSH2+RSH3+RTH1+RTH2+RTH3+RWR+SACR
/FILE_NAME=D:\Emily Mundinger\Inverse Dynamics Grid\Level 3 - exported data\Recreated\p1export_&::TAG_NAMES&.mat
/MATLAB_NAMES=subjectHeight+subjectMass+f1xoriginal+f1yoriginal+f1zoriginal+f2xoriginal+f2yoriginal+f2zoriginal+m1xoriginal+m1yoriginal+m1zoriginal+m2xoriginal+m2yoriginal+m2zoriginal+force1+force2+f1xprocessed+f1yprocessed+f1zprocessed+f2xprocessed+f2yprocessed+f2zprocessed+m1xprocessed+m1yprocessed+m1zprocessed+m2xprocessed+m2yprocessed+m2zprocessed+cop1+cop2+freemoment1+freemoment2+l_ank_angle+l_hip_angle+l_kne_angle+r_ank_angle+r_hip_angle+r_kne_angle+l_ank_moment+l_hip_moment+l_kne_moment+r_ank_moment+r_hip_moment+r_kne_moment+l_ank_power+l_hip_power+l_kne_power+r_ank_power+r_hip_power+r_kne_power+l_ank_force_loc+l_hip_force_loc+l_kne_force_loc+r_ank_force_loc+r_hip_force_loc+r_kne_force_loc+lft_rotenergy+rft_rotenergy+lsk_rotenergy+rsk_rotenergy+lth_rotenergy+rth_rotenergy+l_ank_vel+l_kne_vel+l_hip_vel+r_ank_vel+r_kne_vel+r_hip_vel+HHL+HHR+lsk_wrt_lank+rsk_wrt_rank+lth_wrt_lkne+rth_wrt_rkne+rpv_wrt_lhip+rpv_wrt_rhip+lFtAngAcc+lShAngAcc+lThAngAcc+rFtAngAcc+rSkAngAcc+rThAngAcc+rPvAngAcc+lFtAngVel+lShAngVel+lThAngVel+rFtAngVel+rSkAngVel+rThAngVel+rPvAngVel+lFtCGAcc+lSkCGAcc+lThCGAcc+rFtCGAcc+rSkCGAcc+rThCGAcc+rPvCGAcc+lFtCGPos+lSkCGPos+lThCGPos+rFtCGPos+rSkCGPos+rThCGPos+rPvCGPos+lFtCGVel+lSkCGVel+lThCGVel+rFtCGVel+rSkCGVel+rThCGVel+rPvCGVel+lFtCOP1+rFtCOP1+lFtDistEndPos+lShDistEndPos+lThDistEndPos+rFtDistEndPos+rShDistEndPos+rThDistEndPos+rPvDistEndPos+lFtDistEndVel+lShDistEndVel+lThDistEndVel+rFtDistEndVel+rShDistEndVel+rThDistEndVel+rPvDistEndVel+lFtForce1+rFtForce1+lFtfreemoment1+rFtfreemoment1+lFtProxEndForce+lShProxEndForce+lThProxEndForce+rFtProxEndForce+rShProxEndForce+rThProxEndForce+rPvProxEndForce+lFtProxEndPos+lShProxEndPos+lThProxEndPos+rFtProxEndPos+rShProxEndPos+rThProxEndPos+rPvProxEndPos+lFtProxEndTorque+lShProxEndTorque+lThProxEndTorque+rFtProxEndTorque+rShProxEndTorque+rThProxEndTorque+rPvProxEndTorque+lFtProxEndVel+lShProxEndVel+lThProxEndVel+rFtProxEndVel+rShProxEndVel+rThProxEndVel+rPvProxEndVel+lFtSegResidual+lShSegResidual+lThSegResidual+rFtSegResidual+rShSegResidual+rThSegResidual+rPvSegResidual+centerofmass+AnalogTime+FRAMES+TIME+L5TH_pos+LAC_pos+LASI_pos+LCAL_pos+LEP_pos+LGTR_pos+LLEP_pos+LLML_pos+LMEP_pos+LMML_pos+LSH1_pos+LSH2_pos+LSH3_pos+LTH1_pos+LTH2_pos+LTH3_pos+LWR_pos+R5TH_pos+RAC_pos+RASI_pos+RCAL_pos+REP_pos+RGTR_pos+RLEP_pos+RLML_pos+RMEP_pos+RMML_pos+RSH1_pos+RSH2_pos+RSH3_pos+RTH1_pos+RTH2_pos+RTH3_pos+RWR_pos+SACR_pos+L5TH_pos_proc+LAC_pos_proc+LASI_pos_proc+LCAL_pos_proc+LEP_pos_proc+LGTR_pos_proc+LLEP_pos_proc+LLML_pos_proc+LMEP_pos_proc+LMML_pos_proc+LSH1_pos_proc+LSH2_pos_proc+LSH3_pos_proc+LTH1_pos_proc+LTH2_pos_proc+LTH3_pos_proc+LWR_pos_proc+R5TH_pos_proc+RAC_pos_proc+RASI_pos_proc+RCAL_pos_proc+REP_pos_proc+RGTR_pos_proc+RLEP_pos_proc+RLML_pos_proc+RMEP_pos_proc+RMML_pos_proc+RSH1_pos_proc+RSH2_pos_proc+RSH3_pos_proc+RTH1_pos_proc+RTH2_pos_proc+RTH3_pos_proc+RWR_pos_proc+SACR_pos_proc
/PARAMETER_NAMES=FRAMES+LAB_ROT+UNITS+SCALE+DATA_START+USED+LABELS+GEN_SCALE+OFFSET+UNITS+SCALE+RATIO+ORGIN+CORNERS+CAL_MATRIX+ZERO+ZEROS+MATRIX_STORE
/PARAMETER_GROUPS=POINT+POINT+POINT+POINT+POINT+POINT+POINT+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+FORCE_PLATFORM+FORCE_PLATFORM+FORCE_PLATFORM+FORCE_PLATFORM+FORCE_PLATFORM+FORCE_PLATFORM
/OUTPUT_PARAMETER_NAMES=PointDataFrames+PointLabRot+PointDataUnits+PointDataScaleFactor+PointDataStart+PointDataUsed+PointDataNames+AnalogGenScale+AnalogOffset+AnalogUnits+AnalogScalingFactor+AnalogToPointRatio+ForcePlatformOrigin+ForcePlatformCorners+ForcePlatformCalibration+ForcePlatformZero+ForcePlatformZeros+MatrixStore
/USE_NAN_FOR_DATANOTFOUND=TRUE
;

End_For_Each
/Iteration_Parameter_Name=TAG_NAMES
;